PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '', 'gender': "['Male', 'Female', 'Other']", 'birthday': 'YYYY-MM-DD', 'group': '1, 2'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1280, 720)
  expName = Experiment_v1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine routine_01_Instruction
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    TextComponent instr_text
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        歡迎參加本實驗

        1.請確認已正確配戴 Polar H10 心率帶。
        2.實驗過程中請保持身體放鬆、勿大幅度移動。
        3.本實驗包含：靜坐基準測量、慢呼吸引導與吹氣球任務。

        準備好後，請按下 [空白鍵 Space] 開始練習與測量。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import csv
        import os
        from datetime import datetime

        # 1. 自動建立 log 資料夾 (如果資料夾不存在，會自動創建)
        log_dir = 'marker_log'
        if not os.path.exists(log_dir):
            os.makedirs(log_dir)
      Begin Experiment:
        import threading
        import time
        import urllib.parse
        import urllib.request

        def send_marker(label):
            """送 marker 到 WebPolarReader，並把精確時間存進 PsychoPy 的 csv。
            用背景執行緒送出，不會卡住畫面。"""
            t = time.time()                       # 系統時間（秒），與 marker 的毫秒時間同一個時鐘
            thisExp.addData(label + '_epoch', t)  # PsychoPy csv 也留一份精確時間
            full = f"{label}"             # marker 名稱附上 PsychoPy 的時間，方便事後核對
            url = "http://localhost:8765/marker?label=" + urllib.parse.quote(full)
            def _go():
                try:
                    urllib.request.urlopen(url, timeout=1)
                except Exception as e:
                    print("marker 送出失敗：", label, e)
            threading.Thread(target=_go, daemon=True).start()


        # 自動抓取 Runner 開啟時填寫的 Participant 與 Session
        # 若填寫留空，會給予預設值 'anonymous' 與 '1'
        participant_id = expInfo.get('participant', 'anonymous')
        session_id = expInfo.get('session', '1')

        # 組合檔名並放在 maker_log/ 資料夾下
        # 範例檔名: maker_log/sub-P001_sess-01_marker_20261014_112500.csv
        time_str = datetime.now().strftime('%Y%m%d_%H%M%S')
        log_filename = os.path.join(log_dir, f"sub-{participant_id}_sess-{session_id}_marker_{time_str}.csv")

        # 開啟檔案並寫入標題欄位 (Header)
        with open(log_filename, mode='w', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                'Participant',            # 受試者 ID
                'Session',                # 場次 ID
                'Trial_Index',            # 循環/試驗次數
                'Event_Name',             # 事件名稱 (如: Inhale, Exhale, Deflate)
                'Marker_Code',            # Marker 編號
                'Local_ISO_Time',         # 本地 ISO 時間 (與網站/雲端 timestamp 對齊)
                'Local_Epoch_Time',       # 本地 Epoch 時間 (浮點數，方便做秒數扣減)
                'PsychoPy_Relative_t'     # Routine 內的相對時間 (t)
            ])

        print(f"[Log Setup] 成功建立紀錄檔：{log_filename}")
      Begin Routine:
        ## 1. 取得當前本地精準時間
        #now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        #now_epoch = time.time()
        #
        ## 2. 發送 Marker 代碼
        #marker_code = '100'
        #send_marker(marker_code)
        #
        ## 3. 即時寫入 log/ 資料夾下的 CSV
        #with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
        #    writer = csv.writer(f)
        #    writer.writerow([
        #        participant_id,
        #        session_id,
        #        0,
        #        "Exper_Begin",
        #        marker_code,
        #        now_iso,
        #        f"{now_epoch:.6f}",
        #        f"{t:.4f}"
        #    ])
        #
        ## 控制台除錯印出
        #print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Exper_Begin | Time: {now_iso}")
  Routine routine_02_Practice_Instr
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    TextComponent Practice_Instruction
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        【練習階段說明】
        本實驗主要包含兩個任務：【慢呼吸】 與 【吹氣球】。
        為幫助您熟悉畫面節奏與操作方式，接下來將帶您進行各40秒的流程練習

        若您已確認正確配戴心率設備並準備完畢
        請按下 [空白鍵 Space] 開始進入實驗說明！
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_02_Practice_bridge
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    TextComponent bridge
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        慢呼吸練習已結束，下一部分為吹氣球練習

        請拿起桌上氣球
        當您準備好後
        請按下 [空白鍵 Space ] 進入實驗說明！
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_02_Practice_End
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    TextComponent Practice_End
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        【練習階段結束】

        【正式實驗說明】
        為確保生理數據（HRV 心率變異度）的準確性與公平性：

        1.每個任務開始前，皆會進行靜坐休息 以測量基準值。
        2.請在測量期間保持放鬆坐姿、減少肢體動作與說話。

        請按下 [空白鍵 Space] 開始實驗！
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_02_Practice_Task_breath_Instr
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    TextComponent Task_breath_Instr
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        【慢呼吸練習說明】

        請跟隨畫面圓形進行 4 秒鼻吸氣、6 秒嘴吐氣。
        本次練習將進行4次循環

        請按下 [空白鍵 Space] 開始進入練習！
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_02_Practice_Task_blow_Instr
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    TextComponent Task_blow_Instr
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        【吹氣球練習說明】

        請跟隨畫面指示進行：4 秒鼻吸氣 ， 6 秒對氣球吐氣。
        本次練習將進行4次循環

        注意事項：
        1.請對氣球連續吹 4 口氣，期間請勿將氣球移開嘴巴，也不要讓氣球洩氣！
        2.吸氣時：氣球維持壓在嘴唇上，用「鼻子」吸氣。
        3.請待畫面出現【請將氣球放氣】時，再將氣球放氣

        準備完畢請按下 [空白鍵 Space] 開始進入練習！
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_02_Baseline_A_Notice
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    TextComponent notice
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every frame]:
        【靜坐基準測量】

        請保持舒適坐姿，雙眼注視中央「+」字
        維持自然呼吸，放鬆心情
        （時間：5 分鐘）

        準備好後，請按下 [空白鍵 Space] 開始測量。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      disabled = True
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      Begin Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '200'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Baseline_Instr",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Baseline_Instr | Time: {now_iso}")
  Routine routine_02_Baseline_A_Exper
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    TextComponent cross
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
      text = +
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        sent_2min = False
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '220'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Baseline_Exper_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Baseline_Exper_Begin | Time: {now_iso}")
      Each Frame:
        if not sent_2min and t >= 120:
            # 1. 取得當前本地精準時間
            now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
            now_epoch = time.time()

            # 2. 發送 Marker 代碼
            marker_code = '221'
            send_marker(marker_code)

            # 3. 即時寫入 log/ 資料夾下的 CSV
            with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
                writer = csv.writer(f)
                writer.writerow([
                    participant_id,
                    session_id,
                    0,
                    "Baseline_Exper_End",
                    marker_code,
                    now_iso,
                    f"{now_epoch:.6f}",
                    f"{t:.4f}"
                ])

            # 控制台除錯印出
            print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Baseline_Exper_End | Time: {now_iso}")

            # 2. 發送 Marker 代碼
            marker_code = '310'
            send_marker(marker_code)

            # 3. 即時寫入 log/ 資料夾下的 CSV
            with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
                writer = csv.writer(f)
                writer.writerow([
                    participant_id,
                    session_id,
                    0,
                    "Breath_Pre_Begin",
                    marker_code,
                    now_iso,
                    f"{now_epoch:.6f}",
                    f"{t:.4f}"
                ])

            # 控制台除錯印出
            print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Pre_Begin | Time: {now_iso}")
            sent_2min = True
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '311'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Breath_Pre_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Pre_End | Time: {now_iso}")
    TextComponent text_5
      font = Microsoft JhengHei
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text [set every frame] = $f"目前經過時間：({int(t)//60} min)"
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  Routine routine_03_Task_breath_Instr
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    TextComponent Task_breath
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        【慢呼吸實驗說明】

        請跟隨畫面圓形進行 4 秒鼻吸氣、6 秒嘴吐氣。
        本次實驗將持續5分鐘，共30次循環。

        請按下 [空白鍵 Space] 開始進入實驗！
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # 1. 取得當前本地精準時間
        #now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        #now_epoch = time.time()
        #
        ## 2. 發送 Marker 代碼
        #marker_code = '300'
        #send_marker(marker_code)
        #
        ## 3. 即時寫入 log/ 資料夾下的 CSV
        #with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
        #    writer = csv.writer(f)
        #    writer.writerow([
        #        participant_id,
        #        session_id,
        #        0,
        #        "Breath_Instr",
        #        marker_code,
        #        now_iso,
        #        f"{now_epoch:.6f}",
        #        f"{t:.4f}"
        #    ])
        #
        ## 控制台除錯印出
        #print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Instr | Time: {now_iso}")
  Routine routine_03_Task_breath_Countdown
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    TextComponent Task_breath_Countdown
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $f"【慢呼吸實驗】{5 - int(t)} 秒後開始"
      wrapWidth = 2
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  Routine routine_03_Task_breath
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    PolygonComponent circle_border
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor [set every frame] = $'skyblue' if t < 4.0 else 'orange'
      lineWidth = 2
      shape = circle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    PolygonComponent circle_guide
      fillColor [set every frame] = $'skyblue' if t < 4.0 else 'orange'
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size [set every frame] = $(0.1 + 0.5 * (t / 4.0), 0.1 + 0.5 * (t / 4.0)) if t < 4.0 else (0.6 - 0.5 * ((t - 4.0) / 6.0), 0.6 - 0.5 * ((t - 4.0) / 6.0))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    PolygonComponent bar_bg
      disabled = True
      fillColor = $(0.0000, 0.0000, 0.0000)
      pos = (0, -0.3)
      shape = rectangle
      size = (0.8, 0.83)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent bar_fill
      disabled = True
      fillColor [set every frame] = $'skyblue' if t < 4.0 else 'orange'
      pos [set every frame] = (-0.4 + 0.4 * (t / 4.0), -0.3) if t < 4.0 else (0.0 - 0.4 * ((t - 4.0) / 6.0), -0.3)
      shape = rectangle
      size [set every frame] = (0.8 * (t / 4.0), 0.03) if t < 4.0 else (0.8 * (1.0 - (t - 4.0) / 6.0), 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent inhale
      image = inhale.png
      size [set every frame] = (0.15 + 0.05 * (t / 4.0), 0.15 + 0.05 * (t / 4.0))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent exhale
      image = breath.png
      size [set every frame] = $(0.2 - 0.05 * ((t - 4.0) / 6.0), 0.2 - 0.05 * ((t - 4.0) / 6.0))
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 6.0
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    TextComponent text
      contrast = 2
      font = Microsoft JhengHei
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every frame] = $f"鼻吸氣 ({4 - int(t)}s)" if t < 4.0 else f"嘴吐氣 ({10 - int(t)}s)"
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()
        current_trial = trials.thisN + 1

        # 2. 發送 Marker 代碼
        marker_code = '320'
        if current_trial == 1:
            send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                current_trial,
                "Breath_Exper_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Exper_{current_trial}_Begin | Time: {now_iso}")
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()
        current_trial = trials.thisN + 1

        # 2. 發送 Marker 代碼
        marker_code = '321'
        if current_trial == 30:
            send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Breath_Exper_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Exper_{current_trial}_end | Time: {now_iso}")
  Routine routine_04_Task_Break
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    TextComponent break_text
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
      wrapWidth = 2
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      text:
        慢呼吸實驗已結束，請稍作休息

        下一階段為吹氣球實驗，將於7分鐘後開始
    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        sent_3min = False
        sent_5min = False
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '330'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Breath_Post_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Post_Begin | Time: {now_iso}")
      Each Frame:
        if not sent_3min and t >= 180:
            # 1. 取得當前本地精準時間
            now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
            now_epoch = time.time()

            # 2. 發送 Marker 代碼
            marker_code = '331'
            send_marker(marker_code)

            # 3. 即時寫入 log/ 資料夾下的 CSV
            with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
                writer = csv.writer(f)
                writer.writerow([
                    participant_id,
                    session_id,
                    0,
                    "Breath_Post_End",
                    marker_code,
                    now_iso,
                    f"{now_epoch:.6f}",
                    f"{t:.4f}"
                ])

            # 控制台除錯印出
            print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Post_End | Time: {now_iso}")
            sent_3min = True

        if not sent_5min and t >= 300:
            # 1. 取得當前本地精準時間
            now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
            now_epoch = time.time()

            # 2. 發送 Marker 代碼
            marker_code = '510'
            send_marker(marker_code)

            # 3. 即時寫入 log/ 資料夾下的 CSV
            with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
                writer = csv.writer(f)
                writer.writerow([
                    participant_id,
                    session_id,
                    0,
                    "Blow_Pre_Begin",
                    marker_code,
                    now_iso,
                    f"{now_epoch:.6f}",
                    f"{t:.4f}"
                ])

            # 控制台除錯印出
            print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Pre_Begin | Time: {now_iso}")
            sent_5min = True
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '511'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Blow_Pre_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Pre_End | Time: {now_iso}")
    TextComponent text_2
      font = Microsoft JhengHei
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
      text [set every frame] = $f"目前經過時間：({int(t)//60} min)"
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  Routine routine_05_Task_blow_Instr
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    TextComponent Task_blow
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        【吹氣球實驗說明】

        請跟隨畫面指示進行：4 秒鼻吸氣 ， 6 秒對氣球吐氣。
        本次實驗將進行5分鐘，共6大組吹氣流程。

        注意事項：
        1.請對氣球連續吹 4 口氣，期間請勿將氣球移開嘴巴，也不要讓氣球洩氣！
        2.吸氣時： 氣球維持壓在嘴唇上，用「鼻子」吸氣。
        3.待畫面出現【請將氣球放氣】時，再將氣球放氣

        準備完畢請按下 [空白鍵 Space] 開始進入實驗！
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      disabled = True
      Begin Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '500'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Blow_Instr",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Instr | Time: {now_iso}")
  Routine routine_05_Task_blow_Countdown
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    TextComponent Task_blow_Countdown
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $f"【吹氣球實驗】{5 - int(t)} 秒後開始"
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  Routine routine_05_Task_blow
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    PolygonComponent circle_border_blow
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor [set every frame] = $'skyblue' if t < 4.0 else 'orange'
      lineWidth = 2
      shape = circle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    PolygonComponent circle_guide_blow
      fillColor [set every frame] = $'skyblue' if t < 4.0 else 'orange'
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size [set every frame] = $(0.1 + 0.5 * (t / 4.0), 0.1 + 0.5 * (t / 4.0)) if t < 4.0 else (0.6 - 0.5 * ((t - 4.0) / 6.0), 0.6 - 0.5 * ((t - 4.0) / 6.0))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent inhale_blow
      image = inhale.png
      size [set every frame] = (0.15 + 0.05 * (t / 4.0), 0.15 + 0.05 * (t / 4.0))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent exhale_blow
      image = blowing-balloon.png
      size [set every frame] = $(0.2 - 0.05 * ((t - 4.0) / 6.0), 0.2 - 0.05 * ((t - 4.0) / 6.0))
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 6.0
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    TextComponent text_blow
      contrast = 2
      font = Microsoft JhengHei
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every frame] = $f"鼻吸氣 ({4 - int(t)}s)" if t < 4.0 else f"吹氣球 ({10 - int(t)}s)"
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    CodeComponent code_10
      Code Type = Py
      Begin Experiment:
        total_blow_trials = 1
      Begin Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()
        current_trial = total_blow_trials

        # 2. 發送 Marker 代碼
        marker_code = '520'
        if current_trial == 1:
            send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                current_trial,
                "Blow_Exper_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Exper_{current_trial}_Begin | Time: {now_iso}")
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()
        current_trial = total_blow_trials

        # 2. 發送 Marker 代碼
        marker_code = '521'
        if current_trial == 30:
            send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                current_trial,
                "Blow_Exper_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Exper_{current_trial}_End | Time: {now_iso}")

        total_blow_trials += 1
  Routine routine_05_Task_blow_post
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    TextComponent Task_blow_post
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      wrapWidth = 2
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      text:
        吹氣球實驗已結束，請您稍作休息
        3分鐘後將結束全數實驗流程。
    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '530'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Blow_Post_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Post_Begin | Time: {now_iso}")
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '531'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Blow_Post_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Post_End | Time: {now_iso}")
    TextComponent text_4
      font = Microsoft JhengHei
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every frame] = $f"目前經過時間：({int(t)//60} min)"
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  Routine routine_06_Exper_End
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    TextComponent Exper_End
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 感謝您的配合，實驗已全數結束
      wrapWidth = 2
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Py
      disabled = True
      Begin Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '600'
        send_marker('600')

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Exper_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Exper_End | Time: {now_iso}")
  Routine routine_05_Task_blow_deflate
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    PolygonComponent circle_border_blow_2
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor [set every frame] = $'skyblue' if t < 4.0 else 'orange'
      lineWidth = 2
      shape = circle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    PolygonComponent circle_guide_blow_2
      fillColor [set every frame] = $'skyblue' if t < 4.0 else 'orange'
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = circle
      size [set every frame] = $(0.1 + 0.5 * (t / 4.0), 0.1 + 0.5 * (t / 4.0)) if t < 4.0 else (0.6 - 0.5 * ((t - 4.0) / 6.0), 0.6 - 0.5 * ((t - 4.0) / 6.0))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    ImageComponent inhale_blow_2
      image = inhale.png
      size [set every frame] = (0.15 + 0.05 * (t / 4.0), 0.15 + 0.05 * (t / 4.0))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent exhale_blow_2
      image = blowing-balloon.png
      size [set every frame] = $(0.2 - 0.05 * ((t - 4.0) / 6.0), 0.2 - 0.05 * ((t - 4.0) / 6.0))
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 6.0
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    TextComponent deflate
      font = Microsoft JhengHei
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 請將氣球放氣 並持續跟隨呼吸節奏
      wrapWidth = 2
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    TextComponent text_blow_2
      contrast = 2
      font = Microsoft JhengHei
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every frame] = $f"鼻吸氣 ({4 - int(t)}s)" if t < 4.0 else f"吹氣球 ({10 - int(t)}s)"
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()
        current_trial = total_blow_trials

        # 2. 發送 Marker 代碼
        marker_code = '520'
        if current_trial == 1:
            send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                current_trial,
                "Blow_Exper_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Exper_{current_trial}_Begin | Time: {now_iso}")
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()
        current_trial = total_blow_trials

        # 2. 發送 Marker 代碼
        marker_code = '521'
        if current_trial == 30:
            send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                current_trial,
                "Blow_Exper_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Exper_{current_trial}_End | Time: {now_iso}")

        total_blow_trials += 1
  Routine routine_02_Baseline_A_Countdown
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    TextComponent countdown
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $f"【靜坐基準測量】{3 - int(t)} 秒後開始"
      wrapWidth = 2
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  Routine routine_00_form
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  Routine routine_04_Task_break2
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    TextComponent break_text_2
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
      wrapWidth = 2
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      text:
        吹氣球實驗已結束，請稍作休息

        下一階段為慢呼吸實驗，將於7分鐘後開始
    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        if expInfo['group'] == '1': continueRoutine = False

        sent_3min = False
        sent_5min = False
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '530'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Blow_Post_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Post_Begin | Time: {now_iso}")
      Each Frame:
        if not sent_3min and t >= 180:
            # 1. 取得當前本地精準時間
            now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
            now_epoch = time.time()

            # 2. 發送 Marker 代碼
            marker_code = '531'
            send_marker(marker_code)

            # 3. 即時寫入 log/ 資料夾下的 CSV
            with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
                writer = csv.writer(f)
                writer.writerow([
                    participant_id,
                    session_id,
                    0,
                    "Blow_Post_End",
                    marker_code,
                    now_iso,
                    f"{now_epoch:.6f}",
                    f"{t:.4f}"
                ])

            # 控制台除錯印出
            print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Blow_Post_End | Time: {now_iso}")
            sent_3min = True

        if not sent_5min and t >= 300:
            # 1. 取得當前本地精準時間
            now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
            now_epoch = time.time()

            # 2. 發送 Marker 代碼
            marker_code = '310'
            send_marker(marker_code)

            # 3. 即時寫入 log/ 資料夾下的 CSV
            with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
                writer = csv.writer(f)
                writer.writerow([
                    participant_id,
                    session_id,
                    0,
                    "Breath_Pre_Begin",
                    marker_code,
                    now_iso,
                    f"{now_epoch:.6f}",
                    f"{t:.4f}"
                ])

            # 控制台除錯印出
            print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Pre_Begin | Time: {now_iso}")
            sent_5min = True
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '311'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Breath_Pre_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Pre_End | Time: {now_iso}")
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
      text [set every frame] = $f"目前經過時間：({int(t)/60}min)"
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  Routine routine_03_Task_breath_post
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    TextComponent Task_breath_post
      font = Microsoft JhengHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      wrapWidth = 2
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      text:
        慢呼吸實驗已結束，請您稍作休息
        3分鐘後將結束全數實驗流程。
    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        if expInfo['group'] != '1': continueRoutine = False
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '330'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Breath_Post_Begin",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Post_Begin | Time: {now_iso}")
      End Routine:
        # 1. 取得當前本地精準時間
        now_iso = datetime.now().strftime('%Y-%m-%d %H:%M:%S.%f')
        now_epoch = time.time()

        # 2. 發送 Marker 代碼
        marker_code = '331'
        send_marker(marker_code)

        # 3. 即時寫入 log/ 資料夾下的 CSV
        with open(log_filename, mode='a', newline='', encoding='utf-8-sig') as f:
            writer = csv.writer(f)
            writer.writerow([
                participant_id,
                session_id,
                0,
                "Breath_Post_End",
                marker_code,
                now_iso,
                f"{now_epoch:.6f}",
                f"{t:.4f}"
            ])

        # 控制台除錯印出
        print(f"[Log Saved] Sub: {participant_id} | Sess: {session_id} | Event: Breath_Post_End | Time: {now_iso}")
Flow
  Routine routine_01_Instruction
  Routine routine_02_Baseline_A_Notice
  Routine routine_02_Baseline_A_Countdown
  Routine routine_02_Baseline_A_Exper
  Routine routine_03_Task_breath_Instr
  Routine routine_03_Task_breath_Countdown
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine routine_03_Task_breath
  LoopTerminator trials
  Routine routine_04_Task_Break
  Routine routine_05_Task_blow_Instr
  Routine routine_05_Task_blow_Countdown
  Routine routine_05_Task_blow
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = sequential
    nReps = 7
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    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine routine_05_Task_blow
    LoopTerminator trials_4
    Routine routine_05_Task_blow_deflate
  LoopTerminator trials_5
  Routine routine_05_Task_blow
  Routine routine_05_Task_blow_post
  Routine routine_06_Exper_End
